''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
' Data acquistion program for outdoor air rack
' Indoor Air Quality and Climate Change study (2015-2016)
'
' Laboratory for Atmospheric Research
' Department of Civil & Environmental Engineering
' Washington State University
''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''

'update before deployment but DO NOT check-in other than empty string!
Const VERSION = ""

'uniquely identify this location/datalogger
Const STATION = "outdoorair"
'version-stamped name for data file headers
Const SELF = STATION & "(" & VERSION & ")"

Const DF_TSI_PM = 8
Const TSI_PM_OFF = 0
Const TSI_PM_MLT = (1.0 - TSI_PM_OFF)/5000 '0-1.0 mg/m^3, 0-5V

Const DYLOS_COM = Com4
Const DYLOS_BAUD = 9600
Const DYLOS_FMT = 19 '8/n/1, TTL logic
Const DYLOS_BUFF = 12

Const DF_CO = 5
Const CO_OFF = 0
Const CO_MLT = (2000.0 - CO_OFF)/10000 '0-2000 ppb over 0-10V

Const DF_NOX = 12
Const DF_NO = 13
Const DF_NO2 = 14
Const NOX_OFF = 0
Const NOX_MLT = (200.0 - NOX_OFF)/10000 '200 ppb over 0-10V

Const CH4_COM = Com3
Const CH4_BAUD = 19200
Const CH4_FMT = 19 '8/n/1, TTL logic
Const CH4_BUFF = 800

Const DF_O3 = 6
Const O3_OFF = 0
Const O3_MLT = (500.0 - O3_OFF)/10000 '500 ppb over 0-10V

Const LI840A_COM = Com2
Const LI840A_BAUD = 9600
Const LI840A_FMT = 3 '8/n/1, RS232 logic
Const LI840A_REC = 350
Const LI840A_BUFF = LI840A_REC*2 + 1

Const DF_TYPE_T = 7

Const CAO_SMP_VLV = 2 'sample source: indoor/outdoor
'Const CAO_CO_ZERO = 1 'CO monitor: sample/zero air (scrubbed)
'Const C_PTR_ZERO = 7 'PTR-MS: sample/zero air (generated)

Const ZERO_INTV = 480   'every 8 hours
Const ZERO_OFF = 210    'wait 3-1/2 hrs into interval = 3:30a, 11:30a, 19:30p
Const ZERO_PREFLAG = 1  'flag 1 minute after starting
Const ZERO_DUR = 7      'zero for 7 minutes (<50% of that 15-min interval)
Const ZERO_POSTFLAG = 1 'flag 1 minute after ending


'============================== INTERNALS ===================================
Const INTEG = 250
Const DAYS_OF_DATA = 14 'saved to CPU

Const FT3_PER_M3 = 35.314667
Const MBAR_PER_TORR = 1.3332237
Const MBAR_PER_KPA = 10

Public debug_on As Boolean

Const NTP_ADDR = "0.us.pool.ntp.org"
Const UTC_OFFSET = -8*3600 'sec from UTC = PST
Const NTP_DEV = 100 'ms, tolerable drift
Dim NTP_offset
Units NTP_offset = ms

Dim dusttrak2_analog_pm25
Units dusttrak2_analog_pm25 = mg/m^3

Dim dc1100_record As String * 12
Dim dc1100_size_ratio
Dim dc1100_vals(2)
'dc1100_vals(1) = "small" counts / 100 ft^3
'dc1100_vals(2) = "large" counts / 100 ft^3
Dim dc1100(2)
Alias dc1100(1) = dc1100_pm_small
Alias dc1100(2) = dc1100_pm_large
Units dc1100_pm_small = counts/m^3
Units dc1100_pm_large = counts/m^3

Dim co(1)
Alias co(1) = t300_CO
Units t300_CO = ppbv

Dim o3(1)
Alias o3(1) = t400_O3
Units t400_O3 = ppbv

'Dim o3_record As String * O3_REC
'Dim o3(9)
'Alias o3(1) = m205_O3
'Alias o3(2) = m205_cell_T
'Alias o3(3) = m205_cell_P
''4: date, day of month    '7: time, hour
''5: date, month           '8: time, minute
''6: date, short year      '9: time, second
'Units m205_O3 = ppbv
'Units m205_cell_T = degC
'Units m205_cell_P = mbar

Dim nox(3)
Alias nox(1) = t200_NO2
Alias nox(2) = t200_NO
Alias nox(3) = t200_NOx
Units nox = ppbv

'Dim nox_record(4) As String * NOX_REC
'Dim nox_bytes
'Dim nox(6)
''nox(1): HACK catches "2" within "no2"
'Alias nox(2) = m42C_NO2
'Alias nox(3) = m42C_NO
'Alias nox(4) = m42C_NOx
'Alias nox(5) = nox_tmpr 'should mirror nox(6)
'Alias nox(6) = m42C_self_T 'measured value
'Units nox = ppbv
'Units nox_tmpr = degC
'Units m42C_self_T = degC

Dim disable_ugga As Boolean
Dim ch4_record As String * 400
Dim ch4_year
Dim ch4(25)
'1: date (only year captured)   '2: time (only hour captured)
Alias ch4(3)  = ugga_CH4        '4: CH4 s.d.
Alias ch4(5)  = ugga_H2O        '6: H2O s.d.
Alias ch4(7)  = ugga_CO2        '8: CO2 s.d.
Alias ch4(9)  = ugga_CH4_dry    '10: CH4 dry s.d.
Alias ch4(11) = ugga_CO2_dry    '12: CO2 dry s.d.
Alias ch4(13) = ugga_gas_P      '14: gas P s.d.
Alias ch4(15) = ugga_gas_T      '16: gas T s.d.
Alias ch4(17) = ugga_self_T     '18: self T s.d.
Alias ch4(19) = ugga_ringdown0  '20: ringdown #0 s.d.
Alias ch4(21) = ugga_ringdown1  '22: ringdown #1 s.d.
Alias ch4(23) = ugga_fit_flag   '24: MIU valve
'25: MIU description
Units ugga_CH4 = ppmv
Units ugga_H2O = ppthv
Units ugga_CO2 = ppmv
Units ugga_CH4_dry = ppmv
Units ugga_CO2_dry = ppmv
Units ugga_gas_P = mbar
Units ugga_gas_T = degC
Units ugga_self_T = degC
Units ugga_ringdown0 = usec
Units ugga_ringdown1 = usec
Units ugga_fit_flag = arb

Dim li840a_record As String * LI840A_REC
Dim li840a(32)
'HINT dumb-parsing method ("on non-numeric") also catches numbers within XML tag names
'(1) <li840>
Alias li840a(2) = li840a_cell_T
Alias li840a(3) = li840a_cell_P 'read as kPa, converted to mbar
'(4) <co2>
Alias li840a(5) = li840a_CO2
'(6) </co2>
'(7) <co2abs>
'(8) CO2 absorbance value
'(9) </co2abs>
'(10) <h2o>
Alias li840a(11) = li840a_H2O
'(12) </h2o>
'(13) <h2oabs>
'(14) H2O absorbance value
'(15) </h2oabs>
'(16) <h2odewpoint>
Alias li840a(17) = li840a_dewpoint
'(18) </h2odewpoint>
Alias li840a(19) = li840a_pwr_src
'(20) <co2> (raw)
'(21) raw CO2 number
'(22) </co2>
'(23) <co2ref>
'(24) raw CO2 ref. number
'(25) </co2ref>
'(26) <h2o>
'(27) raw H2O number
'(28) </h2o>
'(29) <h2oref>
'(30) raw H2O number
'(31) </h2oref>
'(32) </li840a>
Units li840a_cell_T = degC
Units li840a_cell_P = mbar
Units li840a_CO2 = ppmv
Units li840a_H2O = ppthv
Units li840a_dewpoint = degC
Units li840a_pwr_src = Vdc

Dim typeT_sample_T
Dim logger_self_T
Units typeT_sample_T = degC
Units logger_self_T = degC

Dim cr3k_lithium_battery
Units cr3k_lithium_battery = Volts

Dim ctrl_smp_vlv
'Dim ctrl_co_zero
'Dim ctrl_ptr_zero
Dim is_sampling_indoor As Boolean
Dim tflag As Boolean 'transition flag
'Dim zflag As Boolean 'CO/PTRMS zero flag
'Dim is_zeroing_CO As Boolean
'Dim is_zeroing_PTRMS As Boolean

Dim rtime(9) As Long
Dim inbetween_1min_scan As Boolean
Dim just_had_1min_scan As Boolean


'============================ DATA TABLES ===================================
DataTable(tsdata,True,1440*DAYS_OF_DATA)
  DataInterval(0,1,min,5)
  Sample(1,is_sampling_indoor,Boolean)
  Sample(1,tflag,Boolean)
    FieldNames("transition_flag")
'  Sample(1,is_zeroing_PTRMS,Boolean)
'  Sample(1,is_zeroing_CO,Boolean)
'  Sample(1,zflag,Boolean)
'    FieldNames("zero_flag")
  Sample(2,dc1100,IEEE4)
  Average(1,t300_CO,FP2,t300_CO=NAN)
    FieldNames("t300_CO")
  Average(1,t400_O3,FP2,t400_O3=NAN)
    FieldNames("t400_O3")
  Average(1,t200_NO2,FP2,t200_NO2=NAN)
    FieldNames("t200_NO2")
  Average(1,t200_NO,FP2,t200_NO=NAN)
    FieldNames("t200_NO")
  Average(1,t200_NOx,FP2,t200_NOx=NAN)
    FieldNames("t200_NOx")
  Average(1,ugga_CH4,FP2,disable_ugga OR ugga_CH4=NAN)
    FieldNames("ugga_CH4")
  Average(1,ugga_H2O,IEEE4,disable_ugga OR ugga_H2O=NAN)
    FieldNames("ugga_H2O")
  Average(1,ugga_CO2,FP2,disable_ugga OR ugga_CO2=NAN)
    FieldNames("ugga_CO2")
  Average(1,ugga_CH4_dry,FP2,disable_ugga OR ugga_CH4_dry=NAN)
    FieldNames("ugga_CH4_dry")
  Average(1,ugga_CO2_dry,FP2,disable_ugga OR ugga_CO2_dry=NAN)
    FieldNames("ugga_CO2_dry")
  Average(1,ugga_gas_P,IEEE4,disable_ugga OR ugga_gas_P=NAN)
    FieldNames("ugga_gas_P")
  Average(1,ugga_gas_T,FP2,disable_ugga OR ugga_gas_T=NAN)
    FieldNames("ugga_gas_T")
  Average(1,ugga_self_T,FP2,disable_ugga OR ugga_self_T=NAN)
    FieldNames("ugga_self_T")
  Average(1,ugga_fit_flag,FP2,disable_ugga OR ugga_fit_flag=NAN)
    FieldNames("ugga_fit_flag")
  Average(1,li840a_CO2,FP2,li840a_CO2=NAN)
    FieldNames("li840a_CO2")
  Average(1,li840a_H2O,FP2,li840a_H2O=NAN)
    FieldNames("li840a_H2O")
  Average(1,li840a_cell_T,FP2,li840a_cell_T=NAN)
    FieldNames("li840a_cell_T")
  Average(1,li840a_cell_P,IEEE4,li840a_cell_P=NAN)
    FieldNames("li840a_cell_P")
  Average(1,li840a_dewpoint,FP2,li840a_dewpoint=NAN)
    FieldNames("li840a_dewpoint")
  Average(1,li840a_pwr_src,FP2,li840a_pwr_src=NAN)
    FieldNames("li840a_pwr_src")
  Average(1,typeT_sample_T,FP2,typeT_sample_T=NAN)
    FieldNames("typeT_sample_T")
  Average(1,logger_self_T,FP2,logger_self_T=NAN)
    FieldNames("logger_self_T")
EndTable

'DataTable(stats_indoor,(NOT tflag),48*DAYS_OF_DATA)
'  DataInterval(0,30,min,1)
'  Average(1,t300_CO,FP2,t300_CO=NAN OR zflag)
'  Average(1,t300_CO,FP2,t300_CO=NAN OR NOT zflag)
'    FieldNames("t300_CO_zero")
'  Average(1,m205_O3,FP2,inbetween_1min_scan OR m205_O3=NAN)
'  Average(1,m205_cell_T,FP2,inbetween_1min_scan OR m205_cell_T=NAN)
'  Average(1,m205_cell_P,IEEE4,inbetween_1min_scan OR m205_cell_P=NAN)
'  Average(1,m42C_NO2,FP2,inbetween_1min_scan OR m42C_NO2=NAN)
'  Average(1,m42C_NO,FP2,inbetween_1min_scan OR m42C_NO=NAN)
'  Average(1,m42C_NOx,FP2,inbetween_1min_scan OR m42C_NOx=NAN)
'  Average(1,m42C_self_T,FP2,inbetween_1min_scan OR m42C_self_T=NAN)
''  Average(1,ugga_CH4,FP2,disable_ugga OR ugga_CH4=NAN)
''  Average(1,ugga_H2O,IEEE4,disable_ugga OR ugga_H2O=NAN)
''  Average(1,ugga_CO2,FP2,disable_ugga OR ugga_CO2=NAN)
''  Average(1,ugga_CH4_dry,FP2,disable_ugga OR ugga_CH4_dry=NAN)
''  Average(1,ugga_CO2_dry,FP2,disable_ugga OR ugga_CO2_dry=NAN)
''  Average(1,ugga_gas_P,IEEE4,disable_ugga OR ugga_gas_P=NAN)
''  Average(1,ugga_gas_T,FP2,disable_ugga OR ugga_gas_T=NAN)
''  Average(1,ugga_self_T,FP2,disable_ugga OR ugga_self_T=NAN)
''  Average(1,ugga_fit_flag,FP2,disable_ugga OR ugga_fit_flag=NAN)
'  Average(1,li840a_CO2,FP2,li840a_CO2=NAN)
'  Average(1,li840a_H2O,FP2,li840a_H2O=NAN)
'  Average(1,li840a_cell_T,FP2,li840a_cell_T=NAN)
'  Average(1,li840a_cell_P,IEEE4,li840a_cell_P=NAN)
'  Average(1,li840a_dewpoint,FP2,li840a_dewpoint=NAN)
'  Average(1,typeT_sample_T,FP2,typeT_sample_T=NAN)
'  Average(1,logger_self_T,FP2,logger_self_T=NAN)
'EndTable
'
'DataTable(stats_outdoor,(NOT tflag),48*DAYS_OF_DATA)
'  DataInterval(0,30,min,1)
'  Average(1,t300_CO,FP2,t300_CO=NAN OR zflag)
'  Average(1,t300_CO,FP2,t300_CO=NAN OR NOT zflag)
'    FieldNames("t300_CO_zero")
'  Average(1,m205_O3,FP2,inbetween_1min_scan OR m205_O3=NAN)
'  Average(1,m205_cell_T,FP2,inbetween_1min_scan OR m205_cell_T=NAN)
'  Average(1,m205_cell_P,IEEE4,inbetween_1min_scan OR m205_cell_P=NAN)
'  Average(1,m42C_NO2,FP2,inbetween_1min_scan OR m42C_NO2=NAN)
'  Average(1,m42C_NO,FP2,inbetween_1min_scan OR m42C_NO=NAN)
'  Average(1,m42C_NOx,FP2,inbetween_1min_scan OR m42C_NOx=NAN)
'  Average(1,m42C_self_T,FP2,inbetween_1min_scan OR m42C_self_T=NAN)
''  Average(1,ugga_CH4,FP2,disable_ugga OR ugga_CH4=NAN)
''  Average(1,ugga_H2O,IEEE4,disable_ugga OR ugga_H2O=NAN)
''  Average(1,ugga_CO2,FP2,disable_ugga OR ugga_CO2=NAN)
''  Average(1,ugga_CH4_dry,FP2,disable_ugga OR ugga_CH4_dry=NAN)
''  Average(1,ugga_CO2_dry,FP2,disable_ugga OR ugga_CO2_dry=NAN)
''  Average(1,ugga_gas_P,IEEE4,disable_ugga OR ugga_gas_P=NAN)
''  Average(1,ugga_gas_T,FP2,disable_ugga OR ugga_gas_T=NAN)
''  Average(1,ugga_self_T,FP2,disable_ugga OR ugga_self_T=NAN)
''  Average(1,ugga_fit_flag,FP2,disable_ugga OR ugga_fit_flag=NAN)
'  Average(1,li840a_CO2,FP2,li840a_CO2=NAN)
'  Average(1,li840a_H2O,FP2,li840a_H2O=NAN)
'  Average(1,li840a_cell_T,FP2,li840a_cell_T=NAN)
'  Average(1,li840a_cell_P,IEEE4,li840a_cell_P=NAN)
'  Average(1,li840a_dewpoint,FP2,li840a_dewpoint=NAN)
'  Average(1,typeT_sample_T,FP2,typeT_sample_T=NAN)
'  Average(1,logger_self_T,FP2,logger_self_T=NAN)
'EndTable

DataTable(debug,True,1)
  Sample(1,dusttrak2_analog_pm25,IEEE4)
  Sample(1,co(1),IEEE4)
  Sample(1,o3(1),IEEE4)
  Sample(3,nox(1),IEEE4)
  Sample(1,ch4_record,String)
  Sample(25,ch4(1),IEEE4)
  Sample(1,disable_ugga,Boolean)
  Sample(1,li840a_record,String)
  Sample(32,li840a(1),IEEE4)
  Sample(1,typeT_sample_T,IEEE4)
  Sample(1,logger_self_T,IEEE4)
'  Sample(1,smtp_response,String)
  'Sample(1,scadabr_resp,String)
  'Sample(1,scadabr_success,Boolean)
  Sample(1,NTP_offset,IEEE4)
  Sample(1,ctrl_smp_vlv,IEEE4)
'  Sample(1,ctrl_co_zero,IEEE4)
'  Sample(1,ctrl_ptr_zero,IEEE4)
  Sample(1,is_sampling_indoor,Boolean)
  Sample(1,tflag,Boolean)
'  Sample(1,zflag,Boolean)
'  Sample(1,is_zeroing_CO,Boolean)
'  Sample(1,is_zeroing_PTRMS,Boolean)
EndTable


'================================== MENU ====================================
Const Yes = True
Const Cancel = False
Const No = False

'Public test_email As Boolean
'Public test_scadabr As Boolean

DisplayMenu("Indoor AQ", -1)
  SubMenu("Debug")
    SubMenu("Monitor sensors")
      DisplayValue("TypeT tmpr.", typeT_sample_T)
      DisplayValue("Panel tmpr.", logger_self_T)
      DisplayValue("Dusttrak PM", dusttrak2_analog_pm25)
      SubMenu("PM (Dylos)")
        DisplayValue("DC1100 small", dc1100_pm_small)
        DisplayValue("DC1100 large", dc1100_pm_large)
      EndSubMenu
      SubMenu("Teledyne API")
        DisplayValue("CO", t300_CO)
        DisplayValue("O3", t400_O3)
        DisplayValue("NO2", t200_NO2)
        DisplayValue("NO", t200_NO)
        DisplayValue("NOx", t200_NOx)
      EndSubMenu
      SubMenu("CH4/CO2/H2O (LGR)")
        DisplayValue("CH4", ugga_CH4)
        DisplayValue("CO2", ugga_CO2)
        DisplayValue("H2O", ugga_H2O)
        DisplayValue("CH4 (dry)", ugga_CH4_dry)
        DisplayValue("CO2 (dry)", ugga_CO2_dry)
        DisplayValue("gas press.", ugga_gas_P)
        DisplayValue("gas tmpr.", ugga_gas_T)
        DisplayValue("self tmpr.", ugga_self_T)
        DisplayValue("ringdown 0", ugga_ringdown0)
        DisplayValue("ringdown 1", ugga_ringdown1)
        DisplayValue("fit flag", ugga_fit_flag)
      EndSubMenu
      SubMenu("CO2/H2O (Licor)")
        DisplayValue("CO2", li840a_CO2)
        DisplayValue("H2O", li840a_H2O)
        DisplayValue("Cell tmpr.", li840a_cell_T)
        DisplayValue("Cell press.", li840a_cell_P)
        DisplayValue("Dewpoint", li840a_dewpoint)
        DisplayValue("Power in", li840a_pwr_src)
      EndSubMenu
    EndSubMenu
    MenuItem("Debug  ON", debug_on)
      MenuPick(No,Yes)
'    MenuItem("Test email", test_email)
'      MenuPick(Cancel, Yes)
'    MenuItem("Test ScadaBR", test_scadabr)
'      MenuPick(Cancel, Yes)
    DisplayValue("Indoor air?", is_sampling_indoor)
'    DisplayValue("Zero CO?", is_zeroing_CO)
'    DisplayValue("Zero PTRMS?", is_zeroing_PTRMS)
  EndSubMenu
EndMenu


''================================ EMAIL ====================================
'Include "CPU:email_Enc.cr3"  'contains non-public settings
'Const CRLF = CHR(13) & CHR(10)
'Dim smtp_response As String * 80
'Dim email_failed As Boolean
'
'Const email_boot_subject = "Start-up notice from " & STATION & " CR3000"
'Sub send_startup_email()
'  Dim msg As String * 512
'  msg = ("This is the " & STATION & " CR3000. Starting up..." & CRLF & CRLF)
'  'HINT both CompileResults and CardStatus come with a trailing <CR><LF> but 
'  'CardStatus has a CRLF pair in the middle which must be stripped out
'  msg &= "Compile results: " & RTrim(Status.CompileResults(1))
'  msg &= "Card status: " & RTrim(Replace(Status.CardStatus(1), CRLF, " "))
'  msg &= CRLF & "Program error count: " & Status.ProgErrors & CRLF
'  msg &= "Watchdog error count: " & Status.WatchdogErrors & CRLF
'  msg &= "Run signature: " & Status.RunSignature & CRLF
'  msg &= "Program signature: " & Status.ProgSignature & CRLF
'  msg &= "Power input (Volts): " & Status.Battery & CRLF
'  msg &= "Git tag: " & SELF & CRLF
'  EmailSend(SMTP_SERV,EMAIL_TO,EMAIL_FROM,email_boot_subject,msg,"", _
'      SMTP_USER,SMTP_PASS,smtp_response)
'EndSub
'
'Const email_test_subject = "Test email from " & SELF & " CR3000"
'Const email_test_message = "This is the " & SELF & " CR3000. Testing 1.. 2.. 3.." & CRLF
'Sub send_test_email()
'  EmailSend(SMTP_SERV,EMAIL_TO,EMAIL_FROM,email_test_subject,email_test_message,"", _
'      SMTP_USER,SMTP_PASS,smtp_response)
'  test_email = False
'EndSub
'
'Const EMAIL_DAILY_SUBJECT = "Daily notice from " & STATION & " CR3000"
'Sub send_daily_email()
'  Dim msg As String * 512
'  msg = "Good morning, it's the " & STATION & " CR3000. Yesterday's data "
'  msg &= "files are attached. [" & VERSION & "]"
'  Dim ok As Boolean
'  ok = EmailSend(SMTP_SERV,EMAIL_TO,EMAIL_FROM,EMAIL_DAILY_SUBJECT,msg, _
'         "",SMTP_USER,SMTP_PASS,smtp_response)
'  email_failed = NOT ok
'EndSub


''============================= SCADABR INTEGRATION ==================================
'Include("CPU:scadabr_Enc.cr3")
'Dim scadabr_socket As Long
'Dim scadabr_success As Boolean
'Dim scadabr_resp As String * 256
'
'Sub send_scadabr_data(device As String, payload As String * 400)
'  Dim tstamp As String * 24
'  RealTime(rtime)
'  Sprintf(tstamp,"&__time=%04u%02u%02u%02u%02u%02u", _
'          rtime(1),rtime(2),rtime(3),rtime(4),rtime(5),rtime(6))
'  scadabr_socket = HTTPGet((REPORT_URL & device & tstamp & payload), scadabr_resp, "")
'  scadabr_success = NOT (scadabr_socket OR Len(scadabr_resp))
'EndSub
'
'Sub send_test_ScadaBR()
'  send_scadabr_data("outdoor-rack", "&testing=0")
'  test_scadabr = False
'EndSub
'
'Const RACK1 = "&logger_self_T=%.2f&dusttrak2_analog_pm25=%.3f&typet_sample_t=%.1f"
'Const RACK2 = "&li840a_cell_t=%.2f&li840a_cell_p=%.2f&li840a_pwr_src=%.2f&m42c_self_t=%.1f"
'Const RACK3 = "&m205_cell_t=%.2f&m205_cell_p=%.2f"'&ugga_gas_t=%.2f&ugga_gas_p=%.2f"
''Const RACK4 = "&ugga_self_t=%.2f&ugga_ringdown0=%.3f&ugga_ringdown1=%.3f&ugga_fit_flag=%.1f"
'Sub send_rack_report()
'  Dim msg1 As String * 80, msg2 As String * 88, msg3 As String * 80', msg4 As String * 88
'  
'  Sprintf(msg1, RACK1, logger_self_T, dusttrak2_analog_pm25, typeT_sample_T)
'  Sprintf(msg2, RACK2, li840a_cell_T, li840a_cell_P, li840a_pwr_src, m42C_self_T)
'  Sprintf(msg3, RACK3, m205_cell_T, m205_cell_P)',ugga_gas_T, ugga_gas_P)
'  'Sprintf(msg4, RACK4, ugga_self_T, ugga_ringdown0, ugga_ringdown1, ugga_fit_flag)
'
'  send_scadabr_data("outdoor-rack", (msg1 & msg2 & msg3))' & msg4))
'EndSub
'
'Const GASES1 = "&t300_co=%.3f&m205_o3=%.1f&m42c_no2=%.2f&m42c_no=%.2f&m42c_nox=%.2f"
'Const GASES2 = "&li840a_co2=%.1f&li840a_h2o=%.3f&li840a_dewpoint=%.1f"
''Const GASES3 = "&ugga_ch4=%.3f&ugga_h2o=%.3f&ugga_co2=%.1f&ugga_ch4_dry=%.3f&ugga_co2_dry=%.1f"
'Sub send_gasdata_report(device As String)
'  Dim msg1 As String * 88, msg2 As String * 80', msg3 As String * 100
'
'  Sprintf(msg1, GASES1, t300_CO, m205_O3, m42C_NO2, m42C_NO, m42C_NOx)
'  Sprintf(msg2, GASES2, li840a_CO2, li840a_H2O, li840a_dewpoint)
'  'Sprintf(msg3, GASES3, ugga_CH4, ugga_H2O, ugga_CO2, ugga_CH4_dry, ugga_CO2_dry)
'
'  send_scadabr_data(device, (msg1 & msg2))' & msg3))
'EndSub
'
'Sub send_indoor_report()
'  send_gasdata_report("outdoor-rack-inside")
'EndSub
'
'Sub send_outdoor_report()
'  send_gasdata_report("outdoor-rack-outside")
'EndSub

'================================ FUNCTIONS =================================
Function convert_dc1100_value(number) As Float
  'counts/100 per cubic foot => counts per cubic meter
  Return INT(number * 100 * FT3_PER_M3)
EndFunction

'============================== SUBROUTINES =================================
Sub setup()
  SerialOpen(DYLOS_COM,DYLOS_BAUD,DYLOS_FMT,0,DYLOS_BUFF)
  SerialOpen(CH4_COM,CH4_BAUD,CH4_FMT,0,CH4_BUFF)
  SerialOpen(LI840A_COM,LI840A_BAUD,LI840A_FMT,0,LI840A_BUFF)
  Move(li840a(1),32,NAN,1)      'HACK ensure serial dest vars begin @ NAN to prevent
  Move(ch4(1),25,NAN,1)         'inclusion of 0 in first averages produced
  Move(dc1100_vals(1),2,NAN,1)
  Move(dc1100(1),2,NAN,1)

  RealTime(rtime(1))
  'Scheduled sampling: outside :00-:15 & :30-:45, inside :15-:30 & :45-:00
  ctrl_smp_vlv = IIF((rtime(5) MOD 30) < 15, 0, 5000)
  is_sampling_indoor = ctrl_smp_vlv
  'WARN: not waiting to flush plumbing...
EndSub


'========================= MAIN PROGRAM =====================================
BeginProg
  SetStatus("StationName", SELF) 'XXXX mutually exclusive with `CardOut()`
'  send_startup_email()
  setup()

  'HINT - Los Gatos Research GGA-30p CH4/CO2/H2O analyzer sends messages at
  '       not precisely 1Hz... run twice as fast to avoid losing messages.
  '       Same for Licor LI-840A CO2/H2O analyzer
  Scan(500,mSec,10,0)
    VoltDiff(dusttrak2_analog_pm25,1,mv5000,DF_TSI_PM,True,0,INTEG,TSI_PM_MLT,TSI_PM_OFF)
    VoltDiff(t300_CO,1,mv5000,DF_CO,True,0,INTEG,CO_MLT,CO_OFF)
    VoltDiff(t200_NOx,1,mv5000,DF_NOX,True,0,INTEG,NOX_MLT,NOX_OFF)
    VoltDiff(t200_NO,1,mv5000,DF_NO,True,0,INTEG,NOX_MLT,NOX_OFF)
    VoltDiff(t200_NO2,1,mv5000,DF_NO2,True,0,INTEG,NOX_MLT,NOX_OFF)
    VoltDiff(t400_O3,1,mv5000,DF_O3,True,0,INTEG,O3_MLT,O3_OFF)
    PanelTemp(logger_self_T,INTEG)
    TCDiff(typeT_sample_T,1,mV20,DF_TYPE_T,TypeT,logger_self_T,1,0,INTEG,1,0)

    SerialIn(ch4_record,CH4_COM,5,&h0A,CH4_BUFF)
    If (Len(ch4_record)) Then
      SplitStr(ch4(1),ch4_record,", ",25,6)
      ch4_year = ch4(1) 'convert string->float
      'HACK - compare record year with logger timestamp to verify correctly parsed
      disable_ugga = NOT(ch4_year = rtime(1))
      ugga_gas_P *= MBAR_PER_TORR
      ugga_H2O /= 1000 'ppmv -> ppthv
    ElseIf (ch4_year = NAN) Then
      'do nothing, UGGA vars already set to NAN
    Else
      Move(ch4(1),25,NAN,1)
      ch4_year = NAN
    EndIf

    SerialIn(li840a_record,LI840A_COM,5,&h0A,LI840A_BUFF)
    If (Len(li840a_record)) Then
      SplitStr(li840a(1),li840a_record,"",32,0)
      If (li840a(1)=840 AND li840a(32)=840) Then
        li840a_cell_P *= MBAR_PER_KPA
      Else
        Move(li840a(1),32,NAN,1)
        SerialFlush(LI840A_COM)
      EndIf
    EndIf

    If (debug_on) Then CallTable(debug)
    CallTable(tsdata)
'    If TimeIntoInterval(0,30,Min) Then
'      CallTable(stats_indoor)
'      CallTable(stats_outdoor)
'    ElseIf (is_sampling_indoor) Then 
'      CallTable(stats_indoor)
'    ElseIf (NOT is_sampling_indoor) Then 
'      CallTable(stats_outdoor)
'    EndIf

    'state init'd during setup()
    If TimeIntoInterval(0,30,Min) Then
      ctrl_smp_vlv = 0 'off = outdoor air
      tflag = 1
    ElseIf TimeIntoInterval(1,30,Min) Then
      tflag = 0
    ElseIf TimeIntoInterval(15,30,Min) Then
      ctrl_smp_vlv = 5000 'on = indoor air
      tflag = 1
    ElseIf TimeIntoInterval(16,30,Min) Then
      tflag = 0
    EndIf
    is_sampling_indoor = (ctrl_smp_vlv > 0)
    ExciteCAO(CAO_SMP_VLV,ctrl_smp_vlv,True)

'    'not init'd so possibility of 1st event being skipped
'    If TimeIntoInterval(ZERO_OFF,ZERO_INTV,Min) Then '01:00
'      ctrl_co_zero = 5000 'on
'      ctrl_ptr_zero = 5000 'on
'      zflag = 1
'    ElseIf TimeIntoInterval(ZERO_OFF+ZERO_PREFLAG,ZERO_INTV,Min) Then '01:02
'      zflag = 0
'    ElseIf TimeIntoInterval(ZERO_OFF+ZERO_DUR,ZERO_INTV,Min) Then '02:00
'      ctrl_co_zero = 0 'off
'      ctrl_ptr_zero = 0 'off
'      zflag = 1
'    ElseIf TimeIntoInterval(ZERO_OFF+ZERO_DUR+ZERO_POSTFLAG,ZERO_INTV,Min) Then '02:02
'      zflag = 0
'    EndIf
'    is_zeroing_CO = (ctrl_co_zero > 0)
'    is_zeroing_PTRMS = (ctrl_ptr_zero > 0)
'    ExciteCAO(CAO_CO_ZERO,ctrl_co_zero,True)
'    PortSet(C_PTR_ZERO,ctrl_ptr_zero)

    If TimeIntoInterval(1,10,Min) Then
      RealTime(rtime(1)) 'for UGGA message check
      NTP_offset = NetworkTimeProtocol(NTP_ADDR,UTC_OFFSET,NTP_DEV)
      'send_scadabr_data("outdoor-rack", FormatFloat(NTP_offset,"&ntp_offset=%f"))
    EndIf
    'If (test_scadabr) Then
    '  send_test_scadabr()
    'EndIf

    inbetween_1min_scan = True
    If (just_had_1min_scan) Then
      just_had_1min_scan = False
      inbetween_1min_scan = False
    EndIf
  NextScan

  SlowSequence
  Scan(1,Min,1,0)
    SerialIn(dc1100_record,DYLOS_COM,100,&h0D,DYLOS_BUFF)
    If (Len(dc1100_record)) Then
      SplitStr(dc1100_vals(1),dc1100_record,"",2,0)
      If (dc1100_vals(1)=NAN OR dc1100_vals(2)=NAN) Then
        dc1100_pm_small = NAN
        dc1100_pm_large = NAN
      Else
        dc1100_pm_small = convert_dc1100_value(dc1100_vals(1))
        dc1100_pm_large = convert_dc1100_value(dc1100_vals(2))
      EndIf
      SerialFlush(DYLOS_COM)
    EndIf
    'send_rack_report()
    'If (tflag) Then
    '  'don't report during transition times
    'ElseIf (is_sampling_indoor) Then
    '  send_indoor_report()
    'ElseIf (NOT is_sampling_indoor) Then
    '  send_outdoor_report()
    'EndIf

    just_had_1min_scan = True
  NextScan
    
'  SlowSequence
'  Scan(1,Sec,1,0)
'    If (test_email) Then
'      send_test_email()
'    EndIf
'
'    If TimeIntoInterval(360,1440,Min) Then '6 AM
'      send_daily_email()
'    ElseIf TimeIntoInterval(375, 1440, Min) Then
'      If (email_failed) Then send_daily_email()
'    ElseIf TimeIntoInterval(390, 1440, Min) Then
'      If (email_failed) Then send_daily_email()
'      email_failed = False 'give up until tomorrow
'    EndIf
'
'    If TimeIntoInterval(0,10,Min) Then
'      RealTime(rtime(1)) 'HINT - happens implicitly within ScadaBR integration
'                         'but do so explicitly here for the UGGA message parsing check
'      NTP_offset = NetworkTimeProtocol(NTP_ADDR,UTC_OFFSET,NTP_DEV)
'      send_scadabr_data(FormatFloat(NTP_offset,"&ntp_offset=%f"))
'
'      cr3k_lithium_battery = Status.LithiumBattery
'      send_scadabr_data(FormatFloat(cr3k_lithium_battery,"&cr3k_lithium_battery=%f"))
'    EndIf
'  NextScan
EndProg

